PsychoPy2experiment version="1.81.02"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['P'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1920, 1200]
  Full-screen window = True
  Experiment info = {u'P': u'', u'sess': u''}
  expName = PsychoPy_DDT
  Units = pix
  Screen = 1
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Routines
  Routine End
    ImageComponent end_image
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
      image = /Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/end.png
      size = [1500, 1125]
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  Routine Fixation
    ImageComponent fixation
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      image = /Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/start.png
      size = [1500, 1125]
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  Routine trial
    CodeComponent code_3
      Begin Experiment:
        import random
        ###Setting up the variables for Trial #1####

        #setting initial experiment parameters (longer later and sooner smaller values)
        ll = 100
        ss = random.randrange(0,100,5)

        #setting initial double-limit choice algorithm values for each delay
        #(1 = 1-day, 2 = 1-week, 3 = 1-month, 4 = 1-year)
        OLL1 = 0
        ILL1 = 0
        IUL1 = ll
        OUL1 = ll

        OLL2 = 0
        ILL2 = 0
        IUL2 = ll
        OUL2 = ll

        OLL3 = 0
        ILL3 = 0
        IUL3 = ll
        OUL3 = 100

        OLL4 = 0
        ILL4 = 0
        IUL4 = ll
        OUL4 = ll

        #setting initial dummy variable to indicate the status of the indifference point
        ip1 = 0
        ip2 = 0
        ip3 = 0
        ip4 = 0

        #setting a dummy variable to determine side of screen presentation on each trial
        a = [1,2]

        #starting by selecting randomly from all possible delays
        rows = range(4)
      Begin Routine:
        ###Updating the SS value, determining side of screen


        #Computing updated Sooner/Smaller (SS) values for trial
        if delay == 1 and ip1 == 0: #if 1-day indifference point has not been reached, update ss
            ss1 = random.randrange(OLL1,OUL1,5)
            DDTtask.addData('ss1',ss1)
            ss = ss1
        elif delay == 2 and ip2 == 0: #if 1-week indifference point has not been reached, update ss
            ss2 = random.randrange(OLL2,OUL2,5)
            DDTtask.addData('ss2',ss2)
            ss = ss2
        elif delay == 3 and ip3 == 0: #if 1-month indifference point has not been reached, update ss
            ss3 = random.randrange(OLL3,OUL3,5)
            DDTtask.addData('ss3',ss3)
            ss = ss3
        elif delay == 4 and ip3 == 0: #if 1-year indifference point has not been reached, update ss
            ss4 = random.randrange(OLL4,OUL4,5)
            DDTtask.addData('ss4',ss4)
            ss = ss4

        #determining which background image to display (i.e. left or right)
        side = random.choice(a)
        if side == 1:
            background = r_background
            llloc = [270,37]
            ssloc = [-335, 37]
        elif side == 2:
            background = l_background
            llloc = [-435, 37]
            ssloc = [320,37]
      End Routine:
        # if $100 was on the right and participant hit v, the choice was the immediate reward (resp type 1)
        if side == 1 and response.keys == 'v':
            resp = 1
        # if $100 was on the left and participant hit v, the choice was the immediate reward (resp type 1)
        elif side == 2 and response.keys == 'b':
            resp = 1
        elif side == 1 and response.keys == 'b':
            resp = 2
        elif side == 2 and response.keys == 'v':
            resp = 2

        ###Updating and saving 1-day specific variables####
        if delay == 1 and ip1 == 0: #if 1-day
            #Data to keep for 1-day delay
            DDTtask.addData('OLL1',OLL1)
            DDTtask.addData('ILL1',ILL1)
            DDTtask.addData('IUL1',IUL1)
            DDTtask.addData('OUL1',OUL1)
            DDTtask.addData('resptype1',resp)
        #    DDTtask.addData('ip1',ip1)
            #RULE 1
            if resp == 1 and ss < IUL1: #if 1-day and participant selects smaller-sooner value < IUL
                if ss >= ILL1: # If ss is between inside bands, lower the upper band
                    OLL1 = OLL1
                    ILL1 = ILL1
                    IUL1 = ss
                    OUL1 = IUL1
                elif ss < ILL1: #If ss is lower than the inside lower band, decrease both bands
                    OLL1 = 0
                    ILL1 = ss
                    IUL1 = ss
                    OUL1 = IUL1
            #RULE 2
            elif resp == 1 and ss >= IUL1: #if 1-day and participant selects smaller-sooner value >= IUL
                OLL1 = OLL1
                ILL1 = ILL1
                IUL1 = IUL1
                OUL1 = ss # Decrease the outer limit of the upper band
            #RULE 3
            elif resp == 2 and ss <= ILL1: #if 1-day and participant selects larger-later value when ss <= ILL
                OLL1 = ss # Increase the outer limit of the lower band
                ILL1 = ILL1
                IUL1 = IUL1
                OUL1 = OUL1
            #RULE 4
            elif resp == 2 and ss > ILL1: #if 1-day and participant selects larger-later value when ss > ILL1
                if ss <= IUL1: # If ss is between inside bands, raise the lower band
                    OLL1 = ILL1
                    ILL1 = ss
                    IUL1 = IUL1
                    OUL1 = OUL1
                elif ss > IUL1: #If ss is greater than the inside upper band, increase both bands
                    OLL1 = ILL1
                    ILL1 = ss
                    IUL1 = ss
                    OUL1 = 100
            else: #if participant does anything other than respond 'v' or 'b', keep the bands as they are
                OLL1 = OLL1
                ILL1 = ILL1
                IUL1 = IUL1
                OUL1 = OUL1

        ###Updating and saving 1-week specific variables####
        if delay == 2 and ip2 == 0: #if 1-week
            #Data to keep for 1-week delay
            DDTtask.addData('OLL2',OLL2)
            DDTtask.addData('ILL2',ILL2)
            DDTtask.addData('IUL2',IUL2)
            DDTtask.addData('OUL2',OUL2)
            DDTtask.addData('resptype2',resp)
        #    DDTtask.addData('ip2',ip2)
            #RULE 1
            if resp == 1 and ss < IUL2: #if 1-week and participant selects smaller-sooner value < IUL
                if ss >= ILL2: # If ss is between inside bands, lower the upper band
                    OLL2 = OLL2
                    ILL2 = ILL2
                    IUL2 = ss
                    OUL2 = IUL2
                elif ss < ILL2: #If ss is lower than the inside lower band, decrease both bands
                    OLL2 = 0
                    ILL2 = ss
                    IUL2 = ss
                    OUL2 = IUL2
            #RULE 2
            elif resp == 1 and ss >= IUL2: #if 1-week and participant selects smaller-sooner value >= IUL
                OLL2 = OLL2
                ILL2 = ILL2
                IUL2 = IUL2
                OUL2 = ss # Decrease the outer limit of the upper band
            #RULE 3
            elif resp == 2 and ss <= ILL2: #if 1-week and participant selects larger-later value when ss <= ILL
                OLL2 = ss # Increase the outer limit of the lower band
                ILL2 = ILL2
                IUL2 = IUL2
                OUL2 = OUL2
            #RULE 4
            elif resp == 2 and ss > ILL2: #if 1-week and participant selects larger-later value when ss > ILL2
                if ss <= IUL2: # If ss is between inside bands, raise the lower band
                    OLL2 = ILL2
                    ILL2 = ss
                    IUL2 = IUL2
                    OUL2 = OUL2
                elif ss > IUL2: #If ss is greater than the inside upper band, increase both bands
                    OLL2 = ILL2
                    ILL2 = ss
                    IUL2 = ss
                    OUL2 = 100
            else: #if participant does anything other than respond 'v' or 'b', keep the bands as they are
                OLL2 = OLL2
                ILL2 = ILL2
                IUL2 = IUL2
                OUL2 = OUL2

        ###Updating and saving 1-month specific variables####
        if delay == 3 and ip3 == 0: #if 1-month
            #Data to keep for 1-month delay
            DDTtask.addData('OLL3',OLL3)
            DDTtask.addData('ILL3',ILL3)
            DDTtask.addData('IUL3',IUL3)
            DDTtask.addData('OUL3',OUL3)
            DDTtask.addData('resptype3',resp)
        #    DDTtask.addData('ip3',ip3)
            #RULE 1
            if resp == 1 and ss < IUL3: #if 1-month and participant selects smaller-sooner value < IUL
                if ss >= ILL3: # If ss is between inside bands, lower the upper band
                    OLL3 = OLL3
                    ILL3 = ILL3
                    IUL3 = ss
                    OUL3 = IUL3
                elif ss < ILL3: #If ss is lower than the inside lower band, decrease both bands
                    OLL3 = 0
                    ILL3 = ss
                    IUL3 = ss
                    OUL3 = IUL3
            #RULE 2
            elif resp == 1 and ss >= IUL3: #if 1-month and participant selects smaller-sooner value >= IUL
                OLL3 = OLL3
                ILL3 = ILL3
                IUL3 = IUL3
                OUL3 = ss # Decrease the outer limit of the upper band
            #RULE 3
            elif resp == 2 and ss <= ILL3: #if 1-month and participant selects larger-later value when ss <= ILL
                OLL3 = ss # Increase the outer limit of the lower band
                ILL3 = ILL3
                IUL3 = IUL3
                OUL3 = OUL3
            #RULE 4
            elif resp == 2 and ss > ILL3: #if 1-month and participant selects larger-later value when ss > ILL3
                if ss <= IUL3: # If ss is between inside bands, raise the lower band
                    OLL3 = ILL3
                    ILL3 = ss
                    IUL3 = IUL3
                    OUL3 = OUL3
                elif ss > IUL3: #If ss is greater than the inside upper band, increase both bands
                    OLL3 = ILL3
                    ILL3 = ss
                    IUL3 = ss
                    OUL3 = 100
            else: #if participant does anything other than respond 'v' or 'b', keep the bands as they are
                OLL3 = OLL3
                ILL3 = ILL3
                IUL3 = IUL3
                OUL3 = OUL3

        ###Updating and saving 1-year specific variables####
        if delay == 4 and ip4 == 0: #if 1-year
            #Data to keep for 1-year delay
            DDTtask.addData('OLL4',OLL4)
            DDTtask.addData('ILL4',ILL4)
            DDTtask.addData('IUL4',IUL4)
            DDTtask.addData('OUL4',OUL4)
            DDTtask.addData('resptype4',resp)
        #    DDTtask.addData('ip4',ip4)
            #RULE 1
            if resp == 1 and ss < IUL4: #if 1-year and participant selects smaller-sooner value < IUL
                if ss >= ILL4: # If ss is between inside bands, lower the upper band
                    OLL4 = OLL4
                    ILL4 = ILL4
                    IUL4 = ss
                    OUL4 = IUL4
                elif ss < ILL4: #If ss is lower than the inside lower band, decrease both bands
                    OLL4 = 0
                    ILL4 = ss
                    IUL4 = ss
                    OUL4 = IUL4
            #RULE 2
            elif resp == 1 and ss >= IUL4: #if 1-year and participant selects smaller-sooner value >= IUL
                OLL4 = OLL4
                ILL4 = ILL4
                IUL4 = IUL4
                OUL4 = ss # Decrease the outer limit of the upper band
            #RULE 3
            elif resp == 2 and ss <= ILL4: #if 1-year and participant selects larger-later value when ss <= ILL
                OLL4 = ss # Increase the outer limit of the lower band
                ILL4 = ILL4
                IUL4 = IUL4
                OUL4 = OUL4
            #RULE 4
            elif resp == 2 and ss > ILL4: #if 1-year and participant selects larger-later value when ss > ILL4
                if ss <= IUL4: # If ss is between inside bands, raise the lower band
                    OLL4 = ILL4
                    ILL4 = ss
                    IUL4 = IUL4
                    OUL4 = OUL4
                elif ss > IUL4: #If ss is greater than the inside upper band, increase both bands
                    OLL4 = ILL4
                    ILL4 = ss
                    IUL4 = ss
                    OUL4 = 100
            else: #if participant does anything other than respond 'v' or 'b', keep the bands as they are
                OLL4 = OLL4
                ILL4 = ILL4
                IUL4 = IUL4
                OUL4 = OUL4

        ###Updating the indifference point dummy variables for each delay####
        #1-DAY INDIFFERENCE POINT
        d1 = OUL1 - OLL1
        if d1 <= 5:
            ip1 = 1
        elif d1 > 5:
            ip1 = 0
        #1-WEEK INDIFFERENCE POINT
        d2 = OUL2 - OLL2
        if d2 <= 5:
            ip2 = 1
        elif d2 > 5:
            ip2 = 0
        #1-MONTH INDIFFERENCE POINT
        d3 = OUL3 - OLL3
        if d3 <= 5:
            ip3 = 1
        elif d3 > 5:
            ip3 = 0
        #1-YEAR INDIFFERENCE POINT
        d4 = OUL4 - OLL4
        if d4 <= 5:
            ip4 = 1
        elif d4 > 5:
            ip4 = 0
        DDTtask.addData('ip1',ip1)
        DDTtask.addData('ip2',ip2)
        DDTtask.addData('ip3',ip3)
        DDTtask.addData('ip4',ip4)
    ImageComponent bg_stim
      startVal [time (s)] = 0.0
      image [set every repeat] = $background
      size = [1500, 1125]
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    KeyboardComponent response
      forceEndRoutine = True
      allowedKeys = 'v','b'
      startVal [time (s)] = 0.0
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    TextComponent ll_stim
      text [set every repeat] = $'\$%.0f' %($ll)
      pos [set every repeat] = $llloc
      startVal [time (s)] = 0.0
      letterHeight = 60
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    TextComponent ss_stim
      text [set every repeat] = $'\$%.0f' %($ss)
      pos [set every repeat] = $ssloc
      startVal [time (s)] = 0.0
      letterHeight = 60
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  Routine next_loop_rows
    CodeComponent code
      Begin Routine:
        ## ENDING LOOP FOR INDIFFERENCE POINTS THAT HAVE BEEN REACHED
        if ip1 == 0 and ip2 == 0 and ip3 == 0 and ip4 == 0: # no indifference points have been reached, keep all rows
            rows = range(4)
        elif ip1 == 1 and rows.index(0) >= 0:
            rows.remove(0)
        elif ip2 == 1 and rows.index(1) >= 0:
            rows.remove(1)
        elif ip3 == 1 and rows.index(2) >= 0:
            rows.remove(2)
        elif ip4 == 1 and rows.index(3) >= 0:
            rows.remove(3)
        elif ip1 == 1 and ip2 == 1 and ip3 == 1 and ip4 == 1:
            DDTtask.finished = True
        DDTtask.addData('rows',rows) # Saving rows, which is the # used to determine which stimiuli are presented in the next loop
  Routine end_session
    TextComponent text
      text = 'You have completed this section of the experiment, thank you for participating!'
      startVal [time (s)] = 0.0
      letterHeight = 60
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Instructions
    ImageComponent Instructions1
      startVal [time (s)] = 0.0
      image [set every repeat] = $stim
      size = [1500, 1125]
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator DDTinst loopType="TrialHandler"
    conditionsFile = conditions_DDTinst.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{u'stim': u'/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/DDT_Instructions1.png', u'inst': 1},
      {u'stim': u'/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/DDT_Instructions2.png', u'inst': 2},
      {u'stim': u'/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/DDT_Instructions3.png', u'inst': 3}]
    Routine Instructions
  LoopTerminator DDTinst
  LoopInitiator Miniblocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 100
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    LoopInitiator DDTtask loopType="TrialHandler"
      conditionsFile = conditions_DDTtask.xlsx
      loopType = random
      nReps = 1
      Selected rows = $rows
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      conditions:
        [{u'delay': 1, u'r_background': u'/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/rd1.png', u'rowtitle': 0, u'l_background': u'/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/ld1.png'},
        {u'delay': 2, u'r_background': u'/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/rd2.png', u'rowtitle': 1, u'l_background': u'/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/ld2.png'},
        {u'delay': 3, u'r_background': u'/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/rd3.png', u'rowtitle': 2, u'l_background': u'/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/ld3.png'},
        {u'delay': 4, u'r_background': u'/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/rd4.png', u'rowtitle': -1, u'l_background': u'/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/ld4.png'}]
      Routine Fixation
      Routine trial
      Routine End
    LoopTerminator DDTtask
    Routine next_loop_rows
  LoopTerminator Miniblocks
  Routine end_session
