PsychoPy2experiment version="2021.1.4"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['P'], expInfo['sess'], expName)
  Experiment info = {u'P': u'', u'sess': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [2560, 1440]
  expName = PsychoPy_DDT_Pre
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Routines
  Routine ITI
    ImageComponent EndStim
      image = stimuli\end.png
      size = [1500, 1125]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $random.uniform(0.4,0.6)
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  Routine Fixation
    ImageComponent FixationStim
      image = stimuli\start.png
      size = [1500, 1125]
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $random.uniform(1.4,1.6)
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  Routine RowUpdate
    CodeComponent code_3
      Code Type = Auto->JS
      Begin Routine:
        ## Determining whether the indifference points have been reached for each delay
        OLL = [OLL1,OLL2,OLL3,OLL4]
        OUL = [OUL1,OUL2,OUL3,OUL4]
        row = [0,1,2,3]
        for i in range(len(row)):
            d = OUL[i] - OLL[i]
            if d <= 5:
                ip = 1
            elif d > 5:
                ip = 0
            ## ENDING LOOP FOR INDIFFERENCE POINTS THAT HAVE BEEN REACHED
            if ip == 1: # if the ip was just reached, remove it
                row.remove(i)
            if not row:
                DDTminiblocks.finished = True
  Routine trial
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        ## Updating the smaller-sooner reward value, determining side of presentation ##

        # Clearing the SS value because I have OCD
        ss = None

        # Updating the SS value
        if delay == 1 and ip1 == 0: # if 1-day indif. point has not been reached, update ss
            ss1 = random.randrange(OLL1,OUL1+0.05*ll,0.05*ll)
            DDTtrial.addData('ss1',ss1)
            ss = ss1
        elif delay == 1 and ip1 == 1: #if indif. point has been reached...
            ss1 = ss1 # keep as last 1-day smaller-sooner value
            ss = ss1
        elif delay == 2 and ip2 == 0: # if 1-week indif. point has not been reached, update ss
            ss2 = random.randrange(OLL2,OUL2+0.05*ll,0.05*ll)
            DDTtrial.addData('ss2',ss2)
            ss = ss2
        elif delay == 2 and ip2 == 1: #if indif. point has been reached...
            ss2 = ss2 # keep as last 1-day smaller-sooner value
            ss = ss2
        elif delay == 3 and ip3 == 0: # if 1-month indif. point has not been reached, update ss
            ss3 = random.randrange(OLL3,OUL3+0.05*ll,0.05*ll)
            DDTtrial.addData('ss3',ss3)
            ss = ss3
        elif delay == 3 and ip3 == 1: #if indif. point has been reached...
            ss3 = ss3 # keep as last 1-month smaller-sooner value
            ss = ss3
        elif delay == 4 and ip4 == 0: # if 1-year indif. point has not been reached, update ss
            ss4 = random.randrange(OLL4,OUL4+0.05*ll,0.05*ll)
            DDTtrial.addData('ss4',ss4)
            ss = ss4
        elif delay == 4 and ip4 == 1: #if indif. point has been reached...
            ss4 = ss4 # keep as last 1-year smaller-sooner value
            ss = ss4

        #determining which background image to display (i.e. left or right)
        side = random.choice(a)
        if side == 0:
            background = r_background
            llloc = [270,37]
            ssloc = [-335, 37]
        elif side == 1:
            background = l_background
            llloc = [-435, 37]
            ssloc = [320,37]
      End Routine:
        ## Coding Responses as "immediate" or "delayed", and updating double-limit algorithm ranges accordingly

        # Coding response types:
        if side == 0 and TrialResp.keys == 'v':
            resp = 'immediate'
        elif side == 0 and TrialResp.keys == 'b':
            resp = 'delayed'
        elif side == 1 and TrialResp.keys == 'b':
            resp = 'immediate'
        elif side == 1 and TrialResp.keys == 'v':
            resp = 'delayed'

        # Updating the double-limit algorithm values according to the participants' responses
        if delay == 1 and ip1 == 0:
            #data to hold onto for each 1-day trial
            DDTtrial.addData('OLL1',OLL1)
            DDTtrial.addData('ILL1',ILL1)
            DDTtrial.addData('IUL1',IUL1)
            DDTtrial.addData('OUL1',OUL1)
            DDTtrial.addData('resp',resp)
            #Updating the algorithm for the 1-day delay
            if resp == 'immediate' and ss1 < IUL1: #Lowers the entire upper band if the participant chooses the ss reward
                OUL1 = IUL1
                IUL1 = ss1
                if ss1 < ILL1: # if the participant chooses the ss reward when it is low enough, the lower band is also decreased
                    OLL1 = 0
                    ILL1 = ss1
            elif resp == 'delayed' and ss1 > ILL1: #Raises the entire lower band if the participant chooses the ll reward
                OLL1 = ILL1
                ILL1 = ss1
                if ss1 > IUL1: # if the participant chooses the ll reward when the ss value is high enough, the upper band is also increased
                    OUL1 = ll
                    IUL1 = ss1
            elif resp == 'immediate' and ss1 >= IUL1: #If the participant chooses the ss reward and it is within the upper band, the outer upper band decreases accordingly
                OUL1 = ss1
            elif resp == 'delayed' and ss1 <= ILL1: #If the participant chooses the ll reward when the ss is within the lower band, the outer lower band increases accordingly
                OLL1 = ss1

        if delay == 2 and ip2 == 0:
            #data to hold onto for each 1-week trial
            DDTtrial.addData('OLL2',OLL2)
            DDTtrial.addData('ILL2',ILL2)
            DDTtrial.addData('IUL2',IUL2)
            DDTtrial.addData('OUL2',OUL2)
            DDTtrial.addData('resp',resp)
            #Updating the algorithm for the 1-week delay
            if resp == 'immediate' and ss2 < IUL2: #Lowers the entire upper band if the participant chooses the ss reward
                OUL2 = IUL2
                IUL2 = ss2
                if ss2 < ILL2: # if the participant chooses the ss reward when it is low enough, the lower band is also decreased
                    OLL2 = 0
                    ILL2 = ss2
            elif resp == 'delayed' and ss2 > ILL2: #Raises the entire lower band if the participant chooses the ll reward
                OLL2 = ILL2
                ILL2 = ss2
                if ss2 > IUL2: # if the participant chooses the ll reward when the ss value is high enough, the upper band is also increased
                    OUL2 = ll
                    IUL2 = ss2
            elif resp == 'immediate' and ss2 >= IUL2: #If the participant chooses the ss reward and it is within the upper band, the outer upper band decreases accordingly
                OUL2 = ss2
            elif resp == 'delayed' and ss2 <= ILL2: #If the participant chooses the ll reward when the ss is within the lower band, the outer lower band increases accordingly
                OLL2 = ss2

        if delay == 3 and ip3 == 0:
            #data to hold onto for each 1-month trial
            DDTtrial.addData('OLL3',OLL3)
            DDTtrial.addData('ILL3',ILL3)
            DDTtrial.addData('IUL3',IUL3)
            DDTtrial.addData('OUL3',OUL3)
            DDTtrial.addData('resp',resp)
            #Updating the algorithm for the 1-month delay
            if resp == 'immediate' and ss3 < IUL3: #Lowers the entire upper band if the participant chooses the ss reward
                OUL3 = IUL3
                IUL3 = ss3
                if ss3 < ILL3: # if the participant chooses the ss reward when it is low enough, the lower band is also decreased
                    OLL3 = 0
                    ILL3 = ss3
            elif resp == 'delayed' and ss3 > ILL3: #Raises the entire lower band if the participant chooses the ll reward
                OLL3 = ILL3
                ILL3 = ss3
                if ss3 > IUL3: # if the participant chooses the ll reward when the ss value is high enough, the upper band is also increased
                    OUL3 = ll
                    IUL3 = ss3
            elif resp == 'immediate' and ss3 >= IUL3: #If the participant chooses the ss reward and it is within the upper band, the outer upper band decreases accordingly
                OUL3 = ss3
            elif resp == 'delayed' and ss3 <= ILL3: #If the participant chooses the ll reward when the ss is within the lower band, the outer lower band increases accordingly
                OLL3 = ss3

        if delay == 4 and ip4 == 0:
            #data to hold onto for each 1-year trial
            DDTtrial.addData('OLL4',OLL4)
            DDTtrial.addData('ILL4',ILL4)
            DDTtrial.addData('IUL4',IUL4)
            DDTtrial.addData('OUL4',OUL4)
            DDTtrial.addData('resp',resp)
            #Updating the algorithm for the 1-year delay
            if resp == 'immediate' and ss4 < IUL4: #Lowers the entire upper band if the participant chooses the ss reward
                OUL4 = IUL4
                IUL4 = ss4
                if ss4 < ILL4: # if the participant chooses the ss reward when it is low enough, the lower band is also decreased
                    OLL4 = 0
                    ILL4 = ss4
            elif resp == 'delayed' and ss4 > ILL4: #Raises the entire lower band if the participant chooses the ll reward
                OLL4 = ILL4
                ILL4 = ss4
                if ss4 > IUL4: # if the participant chooses the ll reward when the ss value is high enough, the upper band is also increased
                    OUL4 = ll
                    IUL4 = ss4
            elif resp == 'immediate' and ss4 >= IUL4: #If the participant chooses the ss reward and it is within the upper band, the outer upper band decreases accordingly
                OUL4 = ss4
            elif resp == 'delayed' and ss4 <= ILL4: #If the participant chooses the ll reward when the ss is within the lower band, the outer lower band increases accordingly
                OLL4 = ss4
    ImageComponent TrialStim
      image [set every repeat] = $background
      size = [1500, 1125]
      startVal [time (s)] = 0.0
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    TextComponent LLStim
      letterHeight = 60
      pos [set every repeat] = $llloc
      startVal [time (s)] = 0.0
      text [set every repeat] = $ll
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    TextComponent SSStim
      letterHeight = 60
      pos [set every repeat] = $ssloc
      startVal [time (s)] = 0.0
      text [set every repeat] = $ss
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    KeyboardComponent TrialResp
      allowedKeys = 'v','b'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Initating_vars
    CodeComponent code
      Code Type = Auto->JS
      Begin Experiment:
        import random

        ## Setting up the variables for trial 1##
        #reward values
        ll = 100 #larger-later reward is $100

        #double-limit algorithm values
        OLL1 = 0 #outer-limit of lower band for 1-day delay
        ILL1 = 0 #inner-limit of lower band for 1-day delay
        IUL1 = ll #inner-limit of upper band for 1-day delay
        OUL1 = ll #outer-limit of upper band for 1-day delay
        OLL2 = 0 #outer-limit of lower band for 1-week delay
        ILL2 = 0 #inner-limit of lower band for 1-week delay
        IUL2 = ll #inner-limit of upper band for 1-week delay
        OUL2 = ll #outer-limit of upper band for 1-week delay
        OLL3 = 0 #outer-limit of lower band for 1-month delay
        ILL3 = 0 #inner-limit of lower band for 1-month delay
        IUL3 = ll #inner-limit of upper band for 1-month delay
        OUL3 = ll #outer-limit of upper band for 1-month delay
        OLL4 = 0 #outer-limit of lower band for 1-year delay
        ILL4 = 0 #inner-limit of lower band for 1-year delay
        IUL4 = ll #inner-limit of upper band for 1-year delay
        OUL4 = ll #outer-limit of upper band for 1-year delay

        #initial dummy variables for the status of the indifference point at trial #1 (0 = not yet reached, 1 = reached)
        ip1 = 0
        ip2 = 0
        ip3 = 0
        ip4 = 0

        # setting a dummy variable to determine the side of screen to present stimuli on trial #1
        a = [0,1]

        # setting a dummy variable to determine which rows to select from the conditions file
        row = [0,1,2,3]
  Routine Instructions
    ImageComponent InstructionStim
      image [set every repeat] = $stim
      size = [1500, 1125]
      startVal [time (s)] = 0.0
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    KeyboardComponent InstructionKey
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine complete
    TextComponent CompleteMsg
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = This concludes the experiment. Thank you for participating!
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  Routine testing
    TextComponent testingtxt
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = testing before row update
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  Routine testing2
    TextComponent testingtxt2
      letterHeight = 60
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = testing after row update
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Flow
  LoopInitiator DDTInst loopType="TrialHandler"
    conditionsFile = conditions_DDTinst.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'stim': '/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/DDT_Instructions1.png', 'inst': 1},
      {'stim': '/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/DDT_Instructions2.png', 'inst': 2},
      {'stim': '/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/DDT_Instructions3.png', 'inst': 3}]
    Routine Instructions
  LoopTerminator DDTInst
  Routine Initating_vars
  LoopInitiator DDTminiblocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 100
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    LoopInitiator DDTtrial loopType="TrialHandler"
      Selected rows = $row
      conditionsFile = conditions_DDTtask.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'delay': 1, 'r_background': '/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/rd1.png', 'rowtitle': 0, 'l_background': '/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/ld1.png'},
        {'delay': 2, 'r_background': '/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/rd2.png', 'rowtitle': 1, 'l_background': '/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/ld2.png'},
        {'delay': 3, 'r_background': '/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/rd3.png', 'rowtitle': 2, 'l_background': '/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/ld3.png'},
        {'delay': 4, 'r_background': '/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/rd4.png', 'rowtitle': -1, 'l_background': '/Users/jhogeveen/Documents/Dropbox/Fall_2014/tDCS/tDCS_Study_1/PsychoPy_DDT_Pre/stimuli/ld4.png'}]
      Routine Fixation
      Routine trial
      Routine ITI
    LoopTerminator DDTtrial
    Routine RowUpdate
  LoopTerminator DDTminiblocks
  Routine complete
