PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = black
  expName = nback-master-final
  keyboardBackend = ioHub
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Routines
  Routine stim
    CodeComponent this_trial
      Code Type = Py
      Begin Routine:
        thisExp.addData('use_rows', use_rows[trials.thisN])

        trial_im = 'nback_stimuli/'+Stimulus
      End Routine:
        try:
            if int(key_resp.keys) == 1:
                if CorrectResponse == 'target':
                    thisExp.addData('corr_var', 1)
                elif CorrectResponse == 'nontarget':
                    thisExp.addData('corr_var', 0)
            elif int(key_resp.keys) == 2:
                if CorrectResponse == 'target':
                    thisExp.addData('corr_var', 0)
                elif CorrectResponse == 'nontarget':
                    thisExp.addData('corr_var', 1)
        except TypeError:
            thisExp.addData('corr_var', 0)
    TextComponent stim_trial_fixation
      letterHeight = 0.15
      startVal [frame N] = 0
      stopVal [frame N] = 30
      text = +
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    ImageComponent image
      image [set every repeat] = $trial_im
      size = (0.5, 0.5)
      startVal [frame N] = 30
      stopVal [frame N] = 150
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [frame N] = 30
      stopVal [frame N] = 150
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  Routine iti
    CodeComponent trial_fix_show
      Code Type = Py
      Begin Routine:
        if int(trials.thisN) == 9 or int(trials_2.thisN) == 9:
            continueRoutine = False
    TextComponent trial_fixation
      font = Songti SC
      letterHeight = 0.15
      startVal [frame N] = 0
      stopVal [frame N] = 30
      text = +
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  Routine complete
    TextComponent end_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 實驗完成
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    KeyboardComponent end_key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    CodeComponent prep_trials_0_1
      Code Type = Py
      Begin Routine:
        n = 0

        im_file_1 = stim_block_1[n*10]
        im_file_2 = stim_block_1[n*10+1]
        im_file_3 = stim_block_1[n*10+2]
        im_file_4 = stim_block_1[n*10+3]
        im_file_5 = stim_block_1[n*10+4]
        im_file_6 = stim_block_1[n*10+5]
        im_file_7 = stim_block_1[n*10+6]
        im_file_8 = stim_block_1[n*10+7]
        im_file_9 = stim_block_1[n*10+8]
        im_file_10 = stim_block_1[n*10+9]

        target_im_1 = 'nback_stimuli/'+target_ls[n*2]
        block_rule_1 = rules_ls[n*2]

        if block_rule_1 == '0-Back':
            rule_txt_1 = '目標'
            txt_loc_1 = (0,0.2)
            im_loc_1 = (0,-0.1)
        elif block_rule_1 == '2-Back':
            rule_txt_1 = '兩項之前'
            txt_loc_1 = (0,0)
            im_loc_1 = (1,1)

        thisExp.addData('run_no', run_idx[n//4])
    CodeComponent prep_trials_0_2
      Code Type = Py
      Begin Routine:
        n = 0
        im_file_2_1 = stim_block_2[n*10]
        im_file_2_2 = stim_block_2[n*10+1]
        im_file_2_3 = stim_block_2[n*10+2]
        im_file_2_4 = stim_block_2[n*10+3]
        im_file_2_5 = stim_block_2[n*10+4]
        im_file_2_6 = stim_block_2[n*10+5]
        im_file_2_7 = stim_block_2[n*10+6]
        im_file_2_8 = stim_block_2[n*10+7]
        im_file_2_9 = stim_block_2[n*10+8]
        im_file_2_10 = stim_block_2[n*10+9]

        target_im_2 = 'nback_stimuli/'+target_ls[n*2+1]
        block_rule_2 = rules_ls[n*2+1]

        if block_rule_2 == '0-Back':
            rule_txt_2 = '目標'
            txt_loc_2 = (0,0.2)
            im_loc_2 = (0,-0.1)
        elif block_rule_2 == '2-Back':
            rule_txt_2 = '兩項之前'
            txt_loc_2 = (0,0)
            im_loc_2 = (1,1)
    CodeComponent prepared
      Code Type = Py
      Each Frame:
        prepared_continue = False
        if prepared_resp.getKeys(keyList=['1']):
            prepared_continue = True
    TextComponent instr_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [condition] = prepared_continue
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      text:
        請根據熒幕上的指示判斷
        照片是否與兩項之前的照片相符
        或
        照片是否與目標相符

        如果相符請按'1', 不相符請按 '2'

        準備好請按 '1'
    KeyboardComponent prepared_resp
      allowedKeys = '1'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [condition] = prepared_continue
      store = first key
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    TextComponent prep_instr_0_1
      font = Songti SC
      letterHeight = 0.1
      pos [set every repeat] = txt_loc_1
      startVal [condition] = prepared_continue
      stopVal [duration (frames)] = 150
      text [set every repeat] = $rule_txt_1
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    ImageComponent target_0_1
      image [set every repeat] = $target_im_1
      pos [set every repeat] = im_loc_1
      size = (0.5, 0.5)
      startVal [condition] = prepared_continue
      stopVal [duration (frames)] = 150
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    TextComponent trial_fixation_0_1
      letterHeight = 0.15
      startVal [condition] = prep_instr_0_1.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_0_1
      image [set every repeat] = $im_file_1
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_0_1.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_0_1
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_0_1.status==FINISHED
      stopVal [frame N] = 150
      store = first key
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    TextComponent trial_fixation_0_2
      letterHeight = 0.15
      startVal [condition] = key_resp_0_1.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_0_2
      image [set every repeat] = $im_file_2
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_0_2.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_0_2
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_0_2.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_0_3
      letterHeight = 0.15
      startVal [condition] = key_resp_0_2.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_0_3
      image [set every repeat] = $im_file_3
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_0_3.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_0_3
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_0_3.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_0_4
      letterHeight = 0.15
      startVal [condition] = key_resp_0_3.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_0_4
      image [set every repeat] = $im_file_4
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_0_4.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_0_4
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_0_4.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_0_5
      letterHeight = 0.15
      startVal [condition] = key_resp_0_4.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_0_5
      image [set every repeat] = $im_file_5
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_0_5.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_0_5
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_0_5.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_0_6
      letterHeight = 0.15
      startVal [condition] = key_resp_0_5.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_0_6
      image [set every repeat] = $im_file_6
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_0_6.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_0_6
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_0_6.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_0_7
      letterHeight = 0.15
      startVal [condition] = key_resp_0_6.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_0_7
      image [set every repeat] = $im_file_7
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_0_7.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_0_7
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_0_7.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_0_8
      letterHeight = 0.15
      startVal [condition] = key_resp_0_7.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_0_8
      image [set every repeat] = $im_file_8
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_0_8.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_0_8
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_0_8.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_0_9
      letterHeight = 0.15
      startVal [condition] = key_resp_0_8.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_0_9
      image [set every repeat] = $im_file_9
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_0_9.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_0_9
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_0_9.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_0_10
      letterHeight = 0.15
      startVal [condition] = key_resp_0_9.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_0_10
      image [set every repeat] = $im_file_10
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_0_10.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_0_10
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_0_10.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent prep_instr_0_2
      font = Songti SC
      letterHeight = 0.1
      pos [set every repeat] = txt_loc_2
      startVal [condition] = key_resp_0_10.status==FINISHED
      stopVal [duration (frames)] = 150
      text [set every repeat] = $rule_txt_2
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    ImageComponent target_0_2
      image [set every repeat] = $target_im_2
      pos [set every repeat] = im_loc_2
      size = (0.5, 0.5)
      startVal [condition] = key_resp_0_10.status==FINISHED
      stopVal [duration (frames)] = 150
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    TextComponent trial_fixation_3_1
      letterHeight = 0.15
      startVal [condition] = target_0_2.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_3_1
      image [set every repeat] = $im_file_2_1
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_3_1.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_3_1
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_3_1.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_3_2
      letterHeight = 0.15
      startVal [condition] = key_resp_3_1.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_3_2
      image [set every repeat] = $im_file_2_2
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_3_2.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_3_2
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_3_2.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_3_3
      letterHeight = 0.15
      startVal [condition] = key_resp_3_2.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_3_3
      image [set every repeat] = $im_file_2_3
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_3_3.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_3_3
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_3_3.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_3_4
      letterHeight = 0.15
      startVal [condition] = key_resp_3_3.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_3_4
      image [set every repeat] = $im_file_2_4
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_3_4.status==FINISHED
      stopVal [duration (frames)] = 150
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    ImageComponent image_3_5
      image [set every repeat] = $im_file_2_5
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_3_5.status==FINISHED
      stopVal [duration (frames)] = 150
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    ImageComponent image_3_6
      image [set every repeat] = $im_file_2_6
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_3_6.status==FINISHED
      stopVal [duration (frames)] = 150
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    ImageComponent image_3_7
      image [set every repeat] = $im_file_2_7
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_3_7.status==FINISHED
      stopVal [duration (frames)] = 150
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    ImageComponent image_3_8
      image [set every repeat] = $im_file_2_8
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_3_8.status==FINISHED
      stopVal [duration (frames)] = 150
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    ImageComponent image_3_9
      image [set every repeat] = $im_file_2_9
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_3_9.status==FINISHED
      stopVal [duration (frames)] = 150
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    ImageComponent image_3_10
      image [set every repeat] = $im_file_2_10
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_3_10.status==FINISHED
      stopVal [duration (frames)] = 150
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
  Routine trigger
    CodeComponent choose_trials
      Code Type = Py
      Begin Experiment:
        import numpy as np
        import pandas as pd

        # Choosing random runs from the 8 E-Prime runs
        run_idx = np.random.choice(8,2,replace=False)
        #print("run_idx", run_idx)

        # Initializing indices from the .xlsx stim schedule
        run_idx_1 = list(range(80*run_idx[0],80*run_idx[0]+80))
        run_idx_2 = list(range(80*run_idx[1],80*run_idx[1]+80))
        run_rows = run_idx_1 + run_idx_2

        # Initializing target pics
        dataframe = pd.read_excel("trialTypes_nback.xlsx")

        rules_ls_1 = dataframe.loc[dataframe['Run'] == run_idx[0]+1, 'BlockType'].tolist() # if the code doesn't work try changing this to .to_list()
        rules_ls_2 = dataframe.loc[dataframe['Run'] == run_idx[1]+1, 'BlockType'].tolist() # if the code doesn't work try changing this to .to_list()
        rules_ls = rules_ls_1[0::10] + rules_ls_2[0::10]

        target_ls = []
        for idx, rule in enumerate(rules_ls):
            if rule == '2-Back':
                target_stim_name = dataframe['Stimulus'][run_rows[10*idx]]
            elif rule == '0-Back':
                min_range = min(run_rows[10*idx:10*idx+10])
                max_range = max(run_rows[10*idx:10*idx+10])
                # print(min_range,max_range)
                target_stim_name = dataframe[min_range:max_range].loc[dataframe['CorrectResponse'] == 'target','Stimulus'].iloc[0]
            target_ls.append(target_stim_name)

        # Initializing stim pics from the 2 runs
        stim_run_1 = dataframe.loc[dataframe['Run'] == run_idx[0]+1, 'Stimulus'].tolist()
        stim_run_2 = dataframe.loc[dataframe['Run'] == run_idx[1]+1, 'Stimulus'].tolist()

        stim_run_1 = ['nback_stimuli/'+str(i) for i in stim_run_1]
        stim_run_2 = ['nback_stimuli/'+str(i) for i in stim_run_2]

        stim_block_1 = []
        stim_block_2 = []

        for i in range(0, 80, 20):
            stim_block_1.extend(stim_run_1[i:i+10])
            stim_block_2.extend(stim_run_1[i+10:i+20])

        for i in range(0, 80, 20):
            stim_block_1.extend(stim_run_2[i:i+10])
            stim_block_2.extend(stim_run_2[i+10:i+20])
    TextComponent trigger_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 實驗即將開始
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    KeyboardComponent trigger_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prepare_2
    CodeComponent prep_trials_2sdf
      Code Type = Py
      Begin Routine:
        n = block.thisN
        use_rows_2 = run_rows[20*n+10:20*n+20]

        target_im = 'nback_stimuli/'+target_ls[n*2+1]
        block_rule = rules_ls[n*2+1]

        if block_rule == '0-Back':
            txt_loc = (0,0.2)
            im_loc = (0,-0.1)
        elif block_rule == '2-Back':
            txt_loc = (0,0)
            im_loc = (1,1)
    TextComponent prep_instr_dfsd
      font = Songti SC
      letterHeight = 0.1
      pos [set every repeat] = txt_loc
      startVal [frame N] = 0
      stopVal [frame N] = 150
      text [set every repeat] = $block_rule
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    ImageComponent target_2sdf
      image [set every repeat] = $target_im
      pos [set every repeat] = im_loc
      size = (0.5, 0.5)
      startVal [frame N] = 0
      stopVal [frame N] = 150
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  Routine prepare
    CodeComponent prep_trialssd
      Code Type = Py
      Begin Routine:
        n = block.thisN
        use_rows = run_rows[20*n:20*n+10]

        target_im = 'nback_stimuli/'+target_ls[n*2]
        block_rule = rules_ls[n*2]

        if block_rule == '0-Back':
            txt_loc = (0,0.2)
            im_loc = (0,-0.1)
        elif block_rule == '2-Back':
            txt_loc = (0,0)
            im_loc = (1,1)
    TextComponent prep_instr
      font = Songti SC
      letterHeight = 0.1
      pos [set every repeat] = txt_loc
      startVal [frame N] = 0
      stopVal [frame N] = 150
      text [set every repeat] = $block_rule
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    ImageComponent target
      image [set every repeat] = $target_im
      pos [set every repeat] = im_loc
      size = (0.5, 0.5)
      startVal [frame N] = 0
      stopVal [frame N] = 150
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  Routine stim_block
    TextComponent rest_txt_1
      font = Songti SC
      letterHeight = 0.1
      startVal [frame N] = 0
      stopVal [frame N] = 901
      text = 休息
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    CodeComponent prep_trials_1
      Code Type = Py
      Begin Routine:
        n = run.thisN

        im_file_1 = stim_block_1[n*10]
        im_file_2 = stim_block_1[n*10+1]
        im_file_3 = stim_block_1[n*10+2]
        im_file_4 = stim_block_1[n*10+3]
        im_file_5 = stim_block_1[n*10+4]
        im_file_6 = stim_block_1[n*10+5]
        im_file_7 = stim_block_1[n*10+6]
        im_file_8 = stim_block_1[n*10+7]
        im_file_9 = stim_block_1[n*10+8]
        im_file_10 = stim_block_1[n*10+9]

        target_im_1 = 'nback_stimuli/'+target_ls[n*2]
        block_rule_1 = rules_ls[n*2]

        if block_rule_1 == '0-Back':
            rule_txt_1 = '目標'
            txt_loc_1 = (0,0.2)
            im_loc_1 = (0,-0.1)
        elif block_rule_1 == '2-Back':
            rule_txt_1 = '兩項之前'
            txt_loc_1 = (0,0)
            im_loc_1 = (1,1)

        thisExp.addData('run_no', run_idx[n//4])
    CodeComponent prep_trials_2
      Code Type = Py
      Begin Routine:
        n = run.thisN + 1
        im_file_2_1 = stim_block_2[n*10]
        im_file_2_2 = stim_block_2[n*10+1]
        im_file_2_3 = stim_block_2[n*10+2]
        im_file_2_4 = stim_block_2[n*10+3]
        im_file_2_5 = stim_block_2[n*10+4]
        im_file_2_6 = stim_block_2[n*10+5]
        im_file_2_7 = stim_block_2[n*10+6]
        im_file_2_8 = stim_block_2[n*10+7]
        im_file_2_9 = stim_block_2[n*10+8]
        im_file_2_10 = stim_block_2[n*10+9]

        target_im_2 = 'nback_stimuli/'+target_ls[n*2+1]
        block_rule_2 = rules_ls[n*2+1]

        if block_rule_2 == '0-Back':
            rule_txt_2 = '目標'
            txt_loc_2 = (0,0.2)
            im_loc_2 = (0,-0.1)
        elif block_rule_2 == '2-Back':
            rule_txt_2 = '兩項之前'
            txt_loc_2 = (0,0)
            im_loc_2 = (1,1)
    TextComponent prep_instr_1
      font = Songti SC
      letterHeight = 0.1
      pos [set every repeat] = txt_loc_1
      startVal [condition] = rest_txt_1.status==FINISHED
      stopVal [duration (frames)] = 150
      text [set every repeat] = $rule_txt_1
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    ImageComponent target_1
      image [set every repeat] = $target_im_1
      pos [set every repeat] = im_loc_1
      size = (0.5, 0.5)
      startVal [condition] = rest_txt_1.status==FINISHED
      stopVal [frame N] = 150
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    TextComponent trial_fixation_1_1
      letterHeight = 0.15
      startVal [condition] = target_1.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_1_1
      image [set every repeat] = $im_file_1
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_1_1.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_1_1
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_1_1.status==FINISHED
      stopVal [frame N] = 150
      store = first key
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    TextComponent trial_fixation_1_2
      letterHeight = 0.15
      startVal [condition] = key_resp_1_1.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_1_2
      image [set every repeat] = $im_file_2
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_1_2.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_1_2
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_1_2.status==FINISHED
      stopVal [frame N] = 150
      store = first key
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    TextComponent trial_fixation_1_3
      letterHeight = 0.15
      startVal [condition] = key_resp_1_2.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_1_3
      image [set every repeat] = $im_file_3
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_1_3.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_1_3
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_1_3.status==FINISHED
      stopVal [frame N] = 150
      store = first key
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    TextComponent trial_fixation_1_4
      letterHeight = 0.15
      startVal [condition] = key_resp_1_3.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_1_4
      image [set every repeat] = $im_file_4
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_1_4.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_1_4
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_1_4.status==FINISHED
      stopVal [frame N] = 150
      store = first key
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    TextComponent trial_fixation_1_5
      letterHeight = 0.15
      startVal [condition] = key_resp_1_4.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_1_5
      image [set every repeat] = $im_file_5
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_1_5.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_1_5
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_1_5.status==FINISHED
      stopVal [frame N] = 150
      store = first key
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    TextComponent trial_fixation_1_6
      letterHeight = 0.15
      startVal [condition] = key_resp_1_5.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_1_6
      image [set every repeat] = $im_file_6
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_1_6.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_1_6
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_1_6.status==FINISHED
      stopVal [frame N] = 150
      store = first key
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    TextComponent trial_fixation_1_7
      letterHeight = 0.15
      startVal [condition] = key_resp_1_6.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_1_7
      image [set every repeat] = $im_file_7
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_1_7.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_1_7
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_1_7.status==FINISHED
      stopVal [frame N] = 150
      store = first key
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    TextComponent trial_fixation_1_8
      letterHeight = 0.15
      startVal [condition] = key_resp_1_7.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_1_8
      image [set every repeat] = $im_file_8
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_1_8.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_1_8
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_1_8.status==FINISHED
      stopVal [frame N] = 150
      store = first key
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    TextComponent trial_fixation_1_9
      letterHeight = 0.15
      startVal [condition] = key_resp_1_8.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_1_9
      image [set every repeat] = $im_file_9
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_1_9.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_1_9
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_1_9.status==FINISHED
      stopVal [frame N] = 150
      store = first key
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    TextComponent trial_fixation_1_10
      letterHeight = 0.15
      startVal [condition] = key_resp_1_9.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_1_10
      image [set every repeat] = $im_file_10
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_1_10.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_1_10
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_1_10.status==FINISHED
      stopVal [frame N] = 150
      store = first key
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    TextComponent prep_instr_2
      font = Songti SC
      letterHeight = 0.1
      pos [set every repeat] = txt_loc_2
      startVal [frame N] = 0
      stopVal [frame N] = 150
      text [set every repeat] = $rule_txt_2
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    ImageComponent target_2
      image [set every repeat] = $target_im_2
      pos [set every repeat] = im_loc_2
      size = (0.5, 0.5)
      startVal [frame N] = 0
      stopVal [frame N] = 150
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    TextComponent trial_fixation_2_1
      letterHeight = 0.15
      startVal [condition] = target_2.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_2_1
      image [set every repeat] = $im_file_2_1
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_2_1.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_2_1
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_2_1.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_2_2
      letterHeight = 0.15
      startVal [condition] = key_resp_2_1.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_2_2
      image [set every repeat] = $im_file_2_2
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_2_2.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_2_2
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_2_2.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_2_3
      letterHeight = 0.15
      startVal [condition] = key_resp_2_2.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_2_3
      image [set every repeat] = $im_file_2_3
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_2_3.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_2_3
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_2_3.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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    TextComponent trial_fixation_2_4
      letterHeight = 0.15
      startVal [condition] = key_resp_2_3.status==FINISHED
      stopVal [duration (frames)] = 30
      text = +
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    ImageComponent image_2_4
      image [set every repeat] = $im_file_2_4
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_2_4.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_2_4
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_2_4.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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
    ImageComponent image_2_5
      image [set every repeat] = $im_file_2_5
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_2_5.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_2_5
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_2_5.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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
    ImageComponent image_2_6
      image [set every repeat] = $im_file_2_6
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_2_6.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_2_6
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_2_6.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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
    ImageComponent image_2_7
      image [set every repeat] = $im_file_2_7
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_2_7.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_2_7
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_2_7.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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
    ImageComponent image_2_8
      image [set every repeat] = $im_file_2_8
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_2_8.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_2_8
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_2_8.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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
    ImageComponent image_2_9
      image [set every repeat] = $im_file_2_9
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_2_9.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_2_9
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_2_9.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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
    ImageComponent image_2_10
      image [set every repeat] = $im_file_2_10
      size = (0.5, 0.5)
      startVal [condition] = trial_fixation_2_10.status==FINISHED
      stopVal [duration (frames)] = 150
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    KeyboardComponent key_resp_2_10
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [condition] = trial_fixation_2_10.status==FINISHED
      stopVal [duration (frames)] = 150
      store = first key
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  Routine rest
    TextComponent rest_txt_2
      font = Songti SC
      letterHeight = 0.1
      startVal [frame N] = 0
      stopVal [frame N] = 901
      text = 休息
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Flow
  Routine trigger
  Routine instructions
  LoopInitiator run loopType="TrialHandler"
    loopType = sequential
    nReps = 7
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    conditions:
      [{'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_002_BP10_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back', 'corrAns': 2},
      {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_001_BP1_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back', 'corrAns': 2},
      {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_006_BP2_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back', 'corrAns': 2},
      {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_001_BP1_BA.png', 'TargetType': 'target', 'CorrectResponse': 'target', 'StimType': 'Body', 'BlockType': '2-Back', 'corrAns': 1},
      {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_005_BP19_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back', 'corrAns': 2},
      {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_003_BP16_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back', 'corrAns': 2},
      {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_006_BP2_BA.png', 'TargetType': 'lure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back', 'corrAns': 2},
      {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_004_BP18_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back', 'corrAns': 2}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
    Routine stim_block
  LoopTerminator run
  Routine rest
  Routine complete
