PsychoPy2experiment version="2021.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = black
  expName = nback-master
  keyboardBackend = ioHub
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Routines
  Routine stim
    CodeComponent this_trial
      Code Type = Py
      Begin Routine:
        #thisExp.addData('use_rows', use_rows[trials.thisN])

        trial_im = 'nback_stimuli/'+Stimulus
      End Routine:
        try:
            if int(key_resp.keys) == 1:
                if CorrectResponse == 'target':
                    thisExp.addData('corr_var', 1)
                elif CorrectResponse == 'nontarget':
                    thisExp.addData('corr_var', 0)
            elif int(key_resp.keys) == 2:
                if CorrectResponse == 'target':
                    thisExp.addData('corr_var', 0)
                elif CorrectResponse == 'nontarget':
                    thisExp.addData('corr_var', 1)
        except TypeError:
            thisExp.addData('corr_var', 0)
    TextComponent stim_trial_fixation
      letterHeight = 0.15
      startVal [frame N] = 0
      stopVal [frame N] = 30
      text = +
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    ImageComponent image
      image [set every repeat] = $trial_im
      size = (0.5, 0.5)
      startVal [frame N] = 30
      stopVal [frame N] = 150
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [frame N] = 30
      stopVal [frame N] = 150
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  Routine iti
    CodeComponent trial_fix_show
      Code Type = Py
      Begin Routine:
        if int(trials.thisN) == 9 or int(trials_2.thisN) == 9:
            continueRoutine = False
    TextComponent trial_fixation
      font = Songti SC
      letterHeight = 0.15
      startVal [frame N] = 0
      stopVal [frame N] = 30
      text = +
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  Routine rest
    TextComponent rest_txt
      font = Songti SC
      letterHeight = 0.1
      startVal [frame N] = 0
      stopVal [frame N] = 901
      text = 休息
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  Routine complete
    TextComponent end_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 實驗完成
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    KeyboardComponent end_key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    CodeComponent choose_trials
      Code Type = Py
      Begin Experiment:
        import numpy as np
        import pandas as pd

        # Choosing random runs
        run_idx = np.random.choice(8,2,replace=False)
        print("run_idx", run_idx)

        run_block_idx_1 = list(range(80*run_idx[0],80*run_idx[0]+80))
        run_block_idx_2 = list(range(80*run_idx[1],80*run_idx[1]+80))
        run_rows = run_block_idx_1 + run_block_idx_2

        # Initializing target pics
        dataframe = pd.read_excel("trialTypes.xlsx")

        rules_ls_1 = dataframe.loc[dataframe['Run'] == run_idx[0]+1, 'BlockType'].tolist() # if the code doesn't work try changing this to .to_list()
        rules_ls_2 = dataframe.loc[dataframe['Run'] == run_idx[1]+1, 'BlockType'].tolist() # if the code doesn't work try changing this to .to_list()
        rules_ls = rules_ls_1[0::10] + rules_ls_2[0::10]

        target_ls = []
        for idx, rule in enumerate(rules_ls):
            if rule == '2-Back':
                target_stim_name = dataframe['Stimulus'][run_rows[10*idx]]
            elif rule == '0-Back':
                min_range = min(run_rows[10*idx:10*idx+10])
                max_range = max(run_rows[10*idx:10*idx+10])
                print(min_range,max_range)
                target_stim_name = dataframe[min_range:max_range].loc[dataframe['CorrectResponse'] == 'target','Stimulus'].iloc[0]
            target_ls.append(target_stim_name)

        print("len(target_ls): ", len(target_ls),"len(rules_ls): ", len(rules_ls))

        # to avoid trials_2 NameError
        class trials_2:
            thisN = 0
    TextComponent instr_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        PREP INSTRUCTIONS

        準備好請按 '1'
    KeyboardComponent prepared_resp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trigger
    TextComponent trigger_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 實驗即將開始
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    KeyboardComponent trigger_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prepare_2
    CodeComponent prep_trials_2
      Code Type = Py
      Begin Routine:
        n = block.thisN
        use_rows_2 = run_rows[20*n+10:20*n+20]

        target_im = 'nback_stimuli/'+target_ls[n*2+1]
        block_rule = rules_ls[n*2+1]

        if block_rule == '0-Back':
            txt_loc = (0,0.2)
            im_loc = (0,-0.1)
        elif block_rule == '2-Back':
            txt_loc = (0,0)
            im_loc = (1,1)
    TextComponent prep_instr_2
      font = Songti SC
      letterHeight = 0.1
      pos [set every repeat] = txt_loc
      startVal [frame N] = 0
      stopVal [frame N] = 150
      text [set every repeat] = $block_rule
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    ImageComponent target_2
      image [set every repeat] = $target_im
      pos [set every repeat] = im_loc
      size = (0.5, 0.5)
      startVal [frame N] = 0
      stopVal [frame N] = 150
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  Routine prepare
    CodeComponent prep_trials
      Code Type = Py
      Begin Routine:
        n = block.thisN
        use_rows = run_rows[20*n:20*n+10]

        target_im = 'nback_stimuli/'+target_ls[n*2]
        block_rule = rules_ls[n*2]

        if block_rule == '0-Back':
            txt_loc = (0,0.2)
            im_loc = (0,-0.1)
        elif block_rule == '2-Back':
            txt_loc = (0,0)
            im_loc = (1,1)
    TextComponent prep_instr
      font = Songti SC
      letterHeight = 0.1
      pos [set every repeat] = txt_loc
      startVal [frame N] = 0
      stopVal [frame N] = 150
      text [set every repeat] = $block_rule
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    ImageComponent target
      image [set every repeat] = $target_im
      pos [set every repeat] = im_loc
      size = (0.5, 0.5)
      startVal [frame N] = 0
      stopVal [frame N] = 150
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Flow
  Routine trigger
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 8
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    Routine prepare
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $use_rows
      conditionsFile = trialTypes.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_002_BP10_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_001_BP1_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_006_BP2_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_001_BP1_BA.png', 'TargetType': 'target', 'CorrectResponse': 'target', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_005_BP19_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_003_BP16_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_006_BP2_BA.png', 'TargetType': 'lure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_004_BP18_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'}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
      Routine stim
    LoopTerminator trials
    Routine prepare_2
    LoopInitiator trials_2 loopType="TrialHandler"
      Selected rows = $use_rows_2
      conditionsFile = trialTypes.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_002_BP10_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_001_BP1_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_006_BP2_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_001_BP1_BA.png', 'TargetType': 'target', 'CorrectResponse': 'target', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_005_BP19_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_003_BP16_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_006_BP2_BA.png', 'TargetType': 'lure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'},
        {'Run': 1, 'Block': 1, 'Weight': 1, 'Stimulus': 'BP_004_BP18_BA.png', 'TargetType': 'nonlure', 'CorrectResponse': 'nontarget', 'StimType': 'Body', 'BlockType': '2-Back'}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
      Routine stim
    LoopTerminator trials_2
    Routine rest
  LoopTerminator block
  Routine complete
