PsychoPy2experiment version="2021.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = stroop
  keyboardBackend = ioHub
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Routines
  Routine instruct
    CodeComponent choose_trials
      Code Type = Py
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      Begin Experiment:
        # Choosing trials for each condition
        useRows = []

        rows1 = np.arange(4)
        cond1 = np.random.choice(rows1,20)
        useRows.append(cond1)

        rows2 = np.arange(12)+4
        cond2 = np.random.choice(rows2,20)
        useRows.append(cond2)

        rows3 = np.arange(12)+16
        cond3 = np.random.choice(rows3,20)
        useRows.append(cond3)

        rows4 = np.arange(36)+28
        cond4 = np.random.choice(rows4,20)
        useRows.append(cond4)

        # Shuffling trials
        useRows = np.concatenate(useRows)
        np.random.shuffle(useRows)
        print(useRows)
        print(type(useRows))

        # ISI for each trial
        import pandas as pd
        timings = pd.read_excel('timings_stroop.xlsx')
        timings = timings['Timings'].tolist()
    TextComponent instrText
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0
      units = height
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      text:
        你將會在熒幕上看到兩個字。

        如果上方的字的顔色與下方的字的意思吻合，
        請按左鍵。
        如果上方的字的顔色與下方的字的意思不吻合，
        請按右鍵。

        準備好請按左鍵
    KeyboardComponent ready
      allowedKeys = 's'
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine trial
    CodeComponent this_trial
      Code Type = Py
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      Begin Routine:
        thisExp.addData('useRows', useRows[trials.thisN])
    TextComponent topTxt
      color [set every repeat] = $topColour
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $topText
      units = height
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    TextComponent bottomTxt
      letterHeight = 0.15
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $bottomText
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    KeyboardComponent resp
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
      storeCorrect = True
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  Routine thanks
    TextComponent thanksText
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 實驗完畢，感謝您的參與！
      units = height
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  Routine ISI
    TextComponent fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine jitter
    CodeComponent vary_ITI
      Code Type = Py
      Begin Routine:
        iti = timings[trials.thisN]
        thisExp.addData('ITI', iti)
    TextComponent fixation_jitter
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti
      text = +
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Flow
  Routine instruct
  LoopInitiator trials loopType="TrialHandler"
    Selected rows = $useRows
    conditionsFile = trialTypes.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cond': 1, 'topText': '紅', 'topColour': 'red', 'bottomText': '紅', 'congruent': 1, 'match': 1, 'corrAns': 'left'},
      {'cond': 1, 'topText': '藍', 'topColour': 'blue', 'bottomText': '藍', 'congruent': 1, 'match': 1, 'corrAns': 'left'},
      {'cond': 1, 'topText': '黃', 'topColour': 'yellow', 'bottomText': '黃', 'congruent': 1, 'match': 1, 'corrAns': 'left'},
      {'cond': 1, 'topText': '綠', 'topColour': 'green', 'bottomText': '綠', 'congruent': 1, 'match': 1, 'corrAns': 'left'},
      {'cond': 2, 'topText': '紅', 'topColour': 'blue', 'bottomText': '藍', 'congruent': 0, 'match': 1, 'corrAns': 'left'},
      {'cond': 2, 'topText': '紅', 'topColour': 'yellow', 'bottomText': '黃', 'congruent': 0, 'match': 1, 'corrAns': 'left'},
      {'cond': 2, 'topText': '紅', 'topColour': 'green', 'bottomText': '綠', 'congruent': 0, 'match': 1, 'corrAns': 'left'},
      {'cond': 2, 'topText': '藍', 'topColour': 'red', 'bottomText': '紅', 'congruent': 0, 'match': 1, 'corrAns': 'left'},
      {'cond': 2, 'topText': '藍', 'topColour': 'yellow', 'bottomText': '黃', 'congruent': 0, 'match': 1, 'corrAns': 'left'},
      {'cond': 2, 'topText': '藍', 'topColour': 'green', 'bottomText': '綠', 'congruent': 0, 'match': 1, 'corrAns': 'left'},
      {'cond': 2, 'topText': '黃', 'topColour': 'red', 'bottomText': '紅', 'congruent': 0, 'match': 1, 'corrAns': 'left'},
      {'cond': 2, 'topText': '黃', 'topColour': 'blue', 'bottomText': '藍', 'congruent': 0, 'match': 1, 'corrAns': 'left'},
      {'cond': 2, 'topText': '黃', 'topColour': 'green', 'bottomText': '綠', 'congruent': 0, 'match': 1, 'corrAns': 'left'}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
    Routine jitter
    Routine trial
  LoopTerminator trials
  Routine thanks
