PsychoPy2experiment version="2023.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Resources = ['continue.png', 'images/4blueTriangles.jpg', 'images/1blueCross.jpg', 'images/1blueDot.jpg', 'images/1blueStar.jpg', 'images/1blueTriangle.jpg', 'images/1greenCross.jpg', 'images/1greenDot.jpg', 'images/1greenStar.jpg', 'images/1greenTriangle.jpg', 'images/1redCross.jpg', 'images/1redDot.jpg', 'images/1redStar.jpg', 'images/1redTriangle.jpg', 'images/1yellowCross.jpg', 'images/1yellowDot.jpg', 'images/1yellowStar.jpg', 'images/1yellowTriangle.jpg', 'images/2blueCrosses.jpg', 'images/2blueDots.jpg', 'images/2blueStars.jpg', 'images/2blueTriangles.jpg', 'images/2greenCrosses.jpg', 'images/2greenDots.jpg', 'images/2greenStars.jpg', 'images/2greenTriangles.jpg', 'images/2redCrosses.jpg', 'images/2redDots.jpg', 'images/2redStars.jpg', 'images/2redTriangles.jpg', 'images/2yellowCrosses.jpg', 'images/2yellowDots.jpg', 'images/2yellowStars.jpg', 'images/2yellowTriangles.jpg', 'images/3blueCrosses.jpg', 'images/3blueDots.jpg', 'images/3blueStars.jpg', 'images/3blueTriangles.jpg', 'images/3greenCrosses.jpg', 'images/3greenDots.jpg', 'images/3greenStars.jpg', 'images/3greenTriangles.jpg', 'images/3redCrosses.jpg', 'images/3redDots.jpg', 'images/3redStars.jpg', 'images/3redTriangles.jpg', 'images/3yellowCrosses.jpg', 'images/3yellowDots.jpg', 'images/3yellowStars.jpg', 'images/3yellowTriangles.jpg', 'images/4blueCrosses.jpg', 'images/4blueDots.jpg', 'images/4blueStars.jpg', 'images/4greenCrosses.jpg', 'images/4greenDots.jpg', 'images/4greenStars.jpg', 'images/4greenTriangles.jpg', 'images/4redCrosses.jpg', 'images/4redDots.jpg', 'images/4redStars.jpg', 'images/4redTriangles.jpg', 'images/4yellowCrosses.jpg', 'images/4yellowDots.jpg', 'images/4yellowStars.jpg', 'images/4yellowTriangles.jpg', 'chooseRule.xlsx', 'colour.xlsx', 'example.jpg', 'number.xlsx', 'shape.xlsx']
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  color = $[-1,-1,-1]
  expName = Wisconsin Card Sorting Task
  keyboardBackend = ioHub
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Routines
  Routine Instructions
    CodeComponent choose_trials
      Code Type = Py
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      Begin Experiment:
        # MRI TR
        TR = 1.6

        # ISI for each trial
        import pandas as pd
        timings = pd.read_excel('timings_wisconsin.xlsx')
        timings = timings['Timings'].tolist()

        # Initialize trial
        print('initialize first trial vars')
        rules = [0, 1, 2]
        corr_counter = 0
        rule_switch_counter = 0
        rule_idx = np.random.choice(rules)
        trials_per_rule = np.random.randint(4,7)
        useRows = np.arange(64) + int(64 * rule_idx)
        iti = 0
        trial_counter = 0
    TextComponent instructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = In this task you will be required to sort the presented cards based on a rule i.e. the cards will have to be sorted based on either colour, shape or number. The rule will not be presented, however you will receive feedback on each trial. After a certain amount of trials the rule will change to a different one. To select your response click on one of the four cards presented at the top of the screen. 
      wrapWidth = .9
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    KeyboardComponent key_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Trials
    CodeComponent response_code
      Code Type = Py
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      Begin Routine:
        thisExp.addData('useRows', useRows[trials.thisN])

        trial_counter += 1
        thisExp.addData('trial_num', trial_counter)

        corr = 0
        rt = 0
      Each Frame:
        # RT more accurate in Each Frame
        rt = round(t*1000)
      End Routine:
        trial_resp = int(response.keys)

        if trial_resp == corrAns:
            corr = 1

        thisExp.addData('Score', corr)
        thisExp.addData('RT', rt)
    ImageComponent one_red_dot
      image = images/1redDot.jpg
      pos = (-0.375, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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    ImageComponent two_yellow_triangles
      image = images/2yellowTriangles.jpg
      pos = (-0.125, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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    ImageComponent three_green_crosses
      image = images/3greenCrosses.jpg
      pos = (0.125, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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    ImageComponent four_blue_stars
      image = images/4blueStars.jpg
      pos = (0.375, 0.25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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    ImageComponent trial_card
      image [set every repeat] = $card
      pos = (0, -0.2)
      size = (0.25, 0.25)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 3.5
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    KeyboardComponent response
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.5
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  Routine Feedback
    CodeComponent feedback_code
      Code Type = Py
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      Begin Experiment:
        msg = ''
      Begin Routine:
        if corr == 1:
            msg="正確"
            corr_counter += 1
        else:
            msg="錯誤"
      End Routine:
        if corr_counter == trials_per_rule:
            trial_by_rule.finished = True

        if trial_counter == 80:
            trial_by_rule.finished = True
            trials.finished = True
    TextComponent feedback_text
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $msg
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  Routine End
    TextComponent thank_you
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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      text:
        This is the end of the experiment.
        Thank you for your time.
  Routine Example
    TextComponent example_text
      letterHeight = 0.04
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = For example, you may see a screen like this:
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    ImageComponent example_image
      image = example.jpg
      pos = (0, 0.15)
      size = (0.7, 0.4)
      startVal [time (s)] = 0.0
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    TextComponent example_text_2
      letterHeight = 0.04
      pos = (0, -0.25)
      startVal [time (s)] = 0.0
      text = The presented card (bottom centre) can be categorised based on shape (dots), colour (yellow) or number (three). Click on the first card if you want to categorise it by the shape, second if you want categorise it by colour and third if you want to categorise it by number. After you select your response, feedback will be provided. Click on the image to start the experiment.
      wrapWidth = .9
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    KeyboardComponent key_resp_2
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine jitter
    CodeComponent vary_ITI
      Code Type = Py
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      Begin Routine:
        if trial_by_rule.thisN == 0:
            iti = timings[trial_counter] + TR
        else:
            iti = timings[trial_counter]

        thisExp.addData('ITI', iti)
    TextComponent fixation
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = iti
      text = +
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  Routine Choose_rule
    CodeComponent choose_rule
      Code Type = Py
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      Begin Routine:
        rules = [0, 1, 2]
        iti = 0

        print('changing rule')
        thisExp.addData('TR', 1.6)
        corr_counter = 0
        rule_switch_counter += 1
        rules.remove(rule_idx)
        rule_idx = np.random.choice(rules)
        trials_per_rule = np.random.randint(4,7)
        useRows = np.arange(64) + int(64 * rule_idx)
  Routine testing_jitter
    TextComponent fixaiton
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = +
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  Routine break_loop
    CodeComponent code
      Code Type = Py
      disabled = True
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      End Routine:
        if trial_counter >= 80:
            trials.finished = True
Flow
  Routine Instructions
  Routine Example
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 80
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    Routine Choose_rule
    LoopInitiator trial_by_rule loopType="TrialHandler"
      Selected rows = $useRows
      conditionsFile = cards.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'cond': 1, 'rule': 'colour', 'card': 'images/1blueCross.jpg', 'corrAns': 4},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1blueDot.jpg', 'corrAns': 4},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1blueStar.jpg', 'corrAns': 4},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1blueTriangle.jpg', 'corrAns': 4},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1greenCross.jpg', 'corrAns': 3},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1greenDot.jpg', 'corrAns': 3},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1greenStar.jpg', 'corrAns': 3},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1greenTriangle.jpg', 'corrAns': 3},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1redCross.jpg', 'corrAns': 1},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1redDot.jpg', 'corrAns': 1},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1redStar.jpg', 'corrAns': 1},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1redTriangle.jpg', 'corrAns': 1},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1yellowCross.jpg', 'corrAns': 2},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1yellowDot.jpg', 'corrAns': 2},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1yellowStar.jpg', 'corrAns': 2},
        {'cond': 1, 'rule': 'colour', 'card': 'images/1yellowTriangle.jpg', 'corrAns': 2},
        {'cond': 1, 'rule': 'colour', 'card': 'images/2blueCrosses.jpg', 'corrAns': 4},
        {'cond': 1, 'rule': 'colour', 'card': 'images/2blueDots.jpg', 'corrAns': 4},
        {'cond': 1, 'rule': 'colour', 'card': 'images/2blueStars.jpg', 'corrAns': 4}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
      Routine jitter
      Routine Trials
      Routine Feedback
    LoopTerminator trial_by_rule
  LoopTerminator trials
  Routine End
