PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = black
  expName = clock-master
  keyboardBackend = ioHub
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Routines
  Routine stim
    CodeComponent this_trial
      Code Type = Py
      Begin Routine:
        thisExp.addData('use_rows', use_rows[trials.thisN])

        topText = f'{Hour}:{Minute:02d}'
      End Routine:
        try:
            if int(key_resp.keys) == int(corrAns):
                thisExp.addData('corr_var', 1)
            elif int(key_resp.keys) != int(corrAns):
                thisExp.addData('corr_var', 0)
        except TypeError:
            thisExp.addData('corr_var', 0)
    TextComponent clock_digital
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [frame N] = 0
      stopVal [frame N] = 150
      text [set every repeat] = $topText
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    TextComponent direction_txt
      letterHeight = 0.15
      pos = (0, -0.2)
      startVal [frame N] = 6
      stopVal [frame N] = 150
      text [set every repeat] = $bottomText
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [frame N] = 6
      stopVal [frame N] = 150
      store = first key
      storeCorrect = True
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  Routine iti
    CodeComponent iti_trial
      Code Type = Py
      Begin Routine:
        if int(trials.thisN) == 9:
            continueRoutine = False
    TextComponent trial_fixation
      font = Songti SC
      letterHeight = 0.15
      startVal [frame N] = 0
      stopVal [frame N] = 30
      text = +
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  Routine rest
    TextComponent rest_txt
      font = Songti SC
      letterHeight = 0.1
      startVal [frame N] = 0
      stopVal [frame N] = 1802
      text = 保持靜止
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  Routine complete
    TextComponent end_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 實驗完成
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    KeyboardComponent end_key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prepare
    CodeComponent prep_trials
      Code Type = Py
      Begin Routine:
        n = block.thisN
        print(n)

        use_rows = match_idx[n*5:n*5+5],no_match_idx[n*5:n*5+5]
        use_rows = np.concatenate(use_rows)
        np.random.shuffle(use_rows)
    TextComponent prep_instr
      font = Songti SC
      letterHeight = 0.05
      pos = (-0.1, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      text = 請判斷上方的時間與下方形容的分針方向是否匹配
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    TextComponent start_indicator
      font = Songti SC
      letterHeight = 0.1
      startVal [frame N] = 120
      stopVal [frame N] = 150
      text = 開始
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  Routine instructions
    CodeComponent choose_trials
      Code Type = Py
      Begin Experiment:
        # Choosing trials for each condition

        rows1 = np.arange(48)
        match_idx = np.random.choice(rows1,40,replace=False)

        rows2 = np.arange(48)+48
        no_match_idx = np.random.choice(rows2,40,replace=False)
        print(match_idx, no_match_idx)
    TextComponent instr_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        請判斷上方的時間與下方的分針方向是否吻合

        如果吻合，請按 '1' 鍵。
        如果不吻合，請按 '2' 鍵。

        準備好請按 '1' 鍵
    KeyboardComponent prepared_resp
      allowedKeys = '1'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trigger
    TextComponent trigger_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 實驗即將開始
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    KeyboardComponent trigger_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trigger
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 8
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    Routine prepare
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $use_rows
      conditionsFile = clock_types.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'cond': 1, 'Hour': 7, 'Minute': 25, 'bottomText': '右下', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 7, 'Minute': 18, 'bottomText': '右下', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 8, 'Minute': 55, 'bottomText': '左上', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 8, 'Minute': 37, 'bottomText': '左下', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 8, 'Minute': 20, 'bottomText': '右下', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 8, 'Minute': 25, 'bottomText': '右下', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 9, 'Minute': 16, 'bottomText': '右下', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 9, 'Minute': 13, 'bottomText': '右上', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 9, 'Minute': 48, 'bottomText': '左下', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 10, 'Minute': 3, 'bottomText': '右上', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 10, 'Minute': 16, 'bottomText': '右下', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 10, 'Minute': 28, 'bottomText': '右下', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 10, 'Minute': 35, 'bottomText': '左下', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 14, 'Minute': 13, 'bottomText': '右上', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 14, 'Minute': 19, 'bottomText': '右下', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 14, 'Minute': 42, 'bottomText': '左下', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 14, 'Minute': 50, 'bottomText': '左上', 'match': 1, 'corrAns': 1},
        {'cond': 1, 'Hour': 16, 'Minute': 5, 'bottomText': '右上', 'match': 1, 'corrAns': 1}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
      Routine stim
      Routine iti
    LoopTerminator trials
    Routine rest
  LoopTerminator block
  Routine complete
