PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = black
  expName = clock-practise
  keyboardBackend = ioHub
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Routines
  Routine stim
    CodeComponent this_trial
      Code Type = Py
      Begin Routine:
        topText = f'{Hour}:{Minute:02d}'
    TextComponent clock_digital
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $topText
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    TextComponent direction_txt
      letterHeight = 0.15
      pos = (0, -0.2)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2.4
      text [set every repeat] = $bottomText
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 2.4
      store = first key
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  Routine iti
    CodeComponent corr_counting
      Code Type = Py
      Begin Experiment:
        corr_counter = 0
      Begin Routine:
        if key_resp.keys == 'left' and int(corrAns) == 1:
            corr_counter += 1
        elif key_resp.keys == 'right' and int(corrAns) == 2:
            corr_counter += 1
      End Experiment:
        print("counter = ", corr_counter, "/10")
    TextComponent trial_fixation
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine rest
    TextComponent rest_txt
      font = Songti SC
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = 休息
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  Routine complete
    TextComponent end_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 實驗完成
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    KeyboardComponent end_key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prepare
    CodeComponent prep_trials
      Code Type = Py
      Begin Routine:
        n = block.thisN
        print(n)

        useRows = match_idx[n*5:n*5+5],no_match_idx[n*5:n*5+5]
        useRows = np.concatenate(useRows)
        np.random.shuffle(useRows)

        print(useRows)
    TextComponent prep_instr
      font = Songti SC
      letterHeight = 0.05
      pos = (-0.1, 0)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = 請判斷上方的時間與下方形容的分針方向是否匹配
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    TextComponent instr_fixation
      letterHeight = 0.15
      startVal [time (s)] = 2.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine instructions
    CodeComponent choose_trials
      Code Type = Py
      Begin Experiment:
        # Choosing trials for each condition

        rows1 = np.arange(48)
        match_idx = np.random.choice(rows1,40,replace=False)

        rows2 = np.arange(48)+48
        no_match_idx = np.random.choice(rows2,40,replace=False)
    TextComponent instr_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        請判斷上方的時間與下方的分針方向是否吻合

        如果吻合，請按左鍵。
        如果不吻合，請按右鍵。

        準備好請按左鍵
    KeyboardComponent prepared_resp
      allowedKeys = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = clock_types_practise.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cond': 1, 'Hour': 12, 'Minute': 15, 'bottomText': '右上', 'match': 1, 'corrAns': 1},
      {'cond': 1, 'Hour': 6, 'Minute': 26, 'bottomText': '右下', 'match': 1, 'corrAns': 1},
      {'cond': 1, 'Hour': 20, 'Minute': 51, 'bottomText': '左上', 'match': 1, 'corrAns': 1},
      {'cond': 1, 'Hour': 18, 'Minute': 5, 'bottomText': '右上', 'match': 1, 'corrAns': 1},
      {'cond': 1, 'Hour': 10, 'Minute': 44, 'bottomText': '左下', 'match': 1, 'corrAns': 1},
      {'cond': 2, 'Hour': 12, 'Minute': 10, 'bottomText': '左上', 'match': 0, 'corrAns': 2},
      {'cond': 2, 'Hour': 6, 'Minute': 18, 'bottomText': '左下', 'match': 0, 'corrAns': 2},
      {'cond': 2, 'Hour': 20, 'Minute': 57, 'bottomText': '左下', 'match': 0, 'corrAns': 2},
      {'cond': 2, 'Hour': 18, 'Minute': 23, 'bottomText': '右上', 'match': 0, 'corrAns': 2},
      {'cond': 2, 'Hour': 10, 'Minute': 7, 'bottomText': '右下', 'match': 0, 'corrAns': 2}]
    Routine stim
    Routine iti
  LoopTerminator trials
  Routine complete
