PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = black
  expName = nback-practise
  keyboardBackend = ioHub
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Routines
  Routine stim
    CodeComponent this_trial
      Code Type = Py
      Begin Routine:
        trial_im = 'nback_stimuli/'+Stimulus
    ImageComponent image
      image [set every repeat] = $trial_im
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      forceEndRoutine = False
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2
      store = first key
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    CodeComponent corr_counting
      Code Type = Py
      Begin Experiment:
        corr_counter = 0
      End Routine:
        try:
            if key_resp.keys == 'left':
                if CorrectResponse == 'target':
                    thisExp.addData('corr_var', 1)
                    corr_counter += 1
                elif CorrectResponse == 'nontarget':
                    thisExp.addData('corr_var', 0)
            elif key_resp.keys == 'right':
                if CorrectResponse == 'target':
                    thisExp.addData('corr_var', 0)
                elif CorrectResponse == 'nontarget':
                    thisExp.addData('corr_var', 1)
                    corr_counter += 1
        except TypeError:
            thisExp.addData('corr_var', 0)

        if int(trials.thisN) == 9:
            print('counter', BlockType, '=', corr_counter)
            corr_counter = 0
  Routine iti
    TextComponent trial_fixation
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine rest
    TextComponent rest_txt
      font = Songti SC
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30
      text = 休息
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  Routine complete
    TextComponent end_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 實驗完成
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    KeyboardComponent end_key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prepare
    CodeComponent prep_trials
      Code Type = Py
      Begin Routine:
        n = block.thisN

        use_rows = list(range(n*10,n*10+10))
        block_rules = ['2-Back','0-Back']
        block_rule = block_rules[n]

        if block_rule == '0-Back':
            rule_txt = '目標'
            txt_loc = (0,0.2)
            im_loc = (0,-0.1)
        elif block_rule == '2-Back':
            rule_txt = '兩項之前'
            txt_loc = (0,0)
            im_loc = (1,1)
    ImageComponent target
      image = nback_stimuli/TO_103_TOOL120_BA.png
      pos [set every repeat] = im_loc
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
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    TextComponent prep_instr
      font = Songti SC
      letterHeight = 0.05
      pos [set every repeat] = txt_loc
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $rule_txt
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  Routine instructions
    CodeComponent choose_trials
      Code Type = Py
      Begin Experiment:
        # Choosing trials for each condition

        rows1 = np.arange(48)
        match_idx = np.random.choice(rows1,40,replace=False)

        rows2 = np.arange(48)+48
        no_match_idx = np.random.choice(rows2,40,replace=False)
    TextComponent instr_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        請根據熒幕上的指示判斷
        照片是否與兩項之前的照片相符
        或
        照片是否與目標相符

        如果相符請按左鍵, 不相符請按右鍵

        準備好請按左鍵
    KeyboardComponent prepared_resp
      allowedKeys = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prepare_2
Flow
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    Routine prepare
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $use_rows
      conditionsFile = trialTypes_practise.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Stimulus': 'FC_102_F103.png', 'CorrectResponse': 'nontarget', 'StimType': 'Face', 'BlockType': '2-Back'},
        {'Stimulus': 'FC_101_M100.png', 'CorrectResponse': 'nontarget', 'StimType': 'Face', 'BlockType': '2-Back'},
        {'Stimulus': 'FC_102_F103.png', 'CorrectResponse': 'target', 'StimType': 'Face', 'BlockType': '2-Back'},
        {'Stimulus': 'FC_100_F101.png', 'CorrectResponse': 'nontarget', 'StimType': 'Face', 'BlockType': '2-Back'},
        {'Stimulus': 'FC_098_F100.png', 'CorrectResponse': 'nontarget', 'StimType': 'Face', 'BlockType': '2-Back'},
        {'Stimulus': 'FC_100_F101.png', 'CorrectResponse': 'target', 'StimType': 'Face', 'BlockType': '2-Back'},
        {'Stimulus': 'FC_098_F100.png', 'CorrectResponse': 'target', 'StimType': 'Face', 'BlockType': '2-Back'},
        {'Stimulus': 'FC_097_M97.png', 'CorrectResponse': 'nontarget', 'StimType': 'Face', 'BlockType': '2-Back'},
        {'Stimulus': 'FC_099_M98.png', 'CorrectResponse': 'nontarget', 'StimType': 'Face', 'BlockType': '2-Back'},
        {'Stimulus': 'FC_097_M97.png', 'CorrectResponse': 'target', 'StimType': 'Face', 'BlockType': '2-Back'},
        {'Stimulus': 'TO_102_TOOL117_BA.png', 'CorrectResponse': 'nontarget', 'StimType': 'Tools', 'BlockType': '0-Back'},
        {'Stimulus': 'TO_103_TOOL120_BA.png', 'CorrectResponse': 'target', 'StimType': 'Tools', 'BlockType': '0-Back'},
        {'Stimulus': 'TO_103_TOOL120_BA.png', 'CorrectResponse': 'target', 'StimType': 'Tools', 'BlockType': '0-Back'},
        {'Stimulus': 'TO_100_TOOL109_BA.png', 'CorrectResponse': 'nontarget', 'StimType': 'Tools', 'BlockType': '0-Back'}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
      Routine iti
      Routine stim
    LoopTerminator trials
  LoopTerminator block
  Routine complete
