PsychoPy2experiment version="2021.1.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = black
  expName = motor
  keyboardBackend = ioHub
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Routines
  Routine motor
    TextComponent motor_instr
      font = Songti SC
      letterHeight = 0.08
      pos = (-0.15,-0.2)
      startVal [frame N] = 0
      stopVal [frame N] = 1802
      text = 請好像走路一樣左右腳輪流踩踏板
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    ImageComponent image
      image = Instructions_pic.png
      pos = (0, 0.2)
      size = (0.5, 0.5)
      startVal [frame N] = 0
      stopVal [frame N] = 1802
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  Routine rest
    TextComponent rest_txt
      font = Songti SC
      letterHeight = 0.1
      startVal [frame N] = 0
      stopVal [frame N] = 1802
      text = 休息
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  Routine prepare
    TextComponent prep_instr
      letterHeight = 0.05
      startVal [frame N] = 0
      stopVal [frame N] = 120
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      text:
        當你看到【開始】的時候，
        請一直向下踩踏板
    TextComponent start_indicator
      font = Songti SC
      letterHeight = 0.1
      startVal [frame N] = 120
      stopVal [frame N] = 150
      text = 開始
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  Routine complete
    TextComponent end_txt
      font = Songti SC
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = 實驗完成
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    KeyboardComponent end_key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instructions
    TextComponent instr_txt
      font = Songti SC
      letterHeight = 0.1
      pos = (-0.05, 0)
      startVal [time (s)] = 0.0
      text = 請根據畫面指示踩踏板
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    KeyboardComponent trigger_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stationary
    TextComponent stationary_txt
      font = Songti SC
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 960
      text = 休息
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    KeyboardComponent testing_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 960
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 8
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    Routine prepare
    Routine motor
    Routine rest
  LoopTerminator trials
  Routine complete
