PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = $[-1,-1,-1]
  expName = stroop-master
  keyboardBackend = ioHub
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Routines
  Routine instructions
    CodeComponent choose_trials
      Code Type = Py
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      Begin Experiment:
        # Choosing trials for each condition

        # congruent, match
        rows1 = np.arange(4)
        cond1 = np.random.choice(rows1,18,replace=True)

        # incongruent, match
        rows2 = np.arange(12)+4
        cond2 = np.random.choice(rows2,18,replace=True)

        # congruent, no match
        rows3 = np.arange(12)+16
        cond3 = np.random.choice(rows3,18,replace=True)

        # incongruent, no match
        rows4 = np.arange(36)+28
        cond4 = np.random.choice(rows4,18,replace=False)

        # neutral, match
        rows5 = np.arange(16)+64
        cond5 = np.random.choice(rows5,18,replace=True)

        # neutral, no match
        rows6 = np.arange(48)+80
        cond6 = np.random.choice(rows6,18,replace=False)

        order_idx = [0,1,2,0,1,2,0,1,2]
        np.random.shuffle(order_idx)

        neutral_done = 0
        congruent_done = 0
        incongruent_done = 0
    TextComponent instr_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0
      units = height
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      text:
        你將會在熒幕上看到兩個字。

        如果上方的字的顔色與下方的字的意思吻合，
        請按 '1' 鍵。
        如果上方的字的顔色與下方的字的意思不吻合，
        請按 '2' 鍵。

        準備好請按 '1' 鍵
    KeyboardComponent prepared_resp
      allowedKeys = '1'
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine prepare
    CodeComponent prep_trials
      Code Type = Py
      Begin Routine:
        n = block.thisN

        if order_idx[n] == 0:
            use_rows = cond5[neutral_done*6:neutral_done*6+6],cond6[neutral_done*6:neutral_done*6+6]
            neutral_done += 1
        elif order_idx[n] == 1:
            use_rows = cond1[congruent_done*6:congruent_done*6+6],cond3[congruent_done*6:congruent_done*6+6]
            congruent_done += 1
        elif order_idx[n] == 2:
            use_rows = cond2[incongruent_done*6:incongruent_done*6+6],cond4[incongruent_done*6:incongruent_done*6+6]
            incongruent_done += 1

        use_rows = np.concatenate(use_rows)
        np.random.shuffle(use_rows)
    TextComponent prep_instr
      font = Songti SC
      letterHeight = 0.05
      pos = (-0.1, 0)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      text = 請判斷上方的字的顔色與下方的字的意思是否吻合
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    TextComponent start_indicator
      font = Songti SC
      letterHeight = 0.1
      startVal [frame N] = 120
      stopVal [frame N] = 150
      text = 開始
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  Routine stim
    CodeComponent this_trial
      Code Type = Py
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      Begin Routine:
        thisExp.addData('use_rows', use_rows[trials.thisN])
    TextComponent top_txt
      color [set every repeat] = $topColour
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [frame N] = 0
      stopVal [frame N] = 120
      text [set every repeat] = $topText
      units = height
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    TextComponent bottom_txt
      letterHeight = 0.15
      pos = (0, -0.2)
      startVal [frame N] = 6
      stopVal [frame N] = 120
      text [set every repeat] = $bottomText
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    KeyboardComponent key_resp
      allowedKeys = '1','2'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [frame N] = 6
      stopVal [frame N] = 120
      store = first key
      storeCorrect = True
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  Routine iti
    CodeComponent trial_fix_show
      Code Type = Py
      Begin Routine:
        if trials.thisN == 11:
            continueRoutine = False
    TextComponent trial_fixation
      font = Songti SC
      letterHeight = 0.15
      startVal [frame N] = 0
      stopVal [frame N] = 30
      text = +
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  Routine rest
    TextComponent rest_txt
      font = Songti SC
      letterHeight = 0.1
      startVal [frame N] = 0
      stopVal [frame N] = 1802
      text = 保持靜止
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  Routine complete
    TextComponent end_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 實驗完成
      units = height
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    KeyboardComponent end_key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trigger
    TextComponent trigger_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 實驗即將開始
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    KeyboardComponent trigger_resp
      allowedKeys = 's'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine trigger
  Routine instructions
  LoopInitiator block loopType="TrialHandler"
    loopType = random
    nReps = 9
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    Routine prepare
    LoopInitiator trials loopType="TrialHandler"
      Selected rows = $use_rows
      conditionsFile = trialTypes.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'cond': 1, 'topText': '紅', 'topColour': 'red', 'bottomText': '紅', 'congruent': 1, 'match': 1, 'corrAns': 1},
        {'cond': 1, 'topText': '藍', 'topColour': 'blue', 'bottomText': '藍', 'congruent': 1, 'match': 1, 'corrAns': 1},
        {'cond': 1, 'topText': '黃', 'topColour': 'yellow', 'bottomText': '黃', 'congruent': 1, 'match': 1, 'corrAns': 1},
        {'cond': 1, 'topText': '綠', 'topColour': 'green', 'bottomText': '綠', 'congruent': 1, 'match': 1, 'corrAns': 1},
        {'cond': 2, 'topText': '紅', 'topColour': 'blue', 'bottomText': '藍', 'congruent': 0, 'match': 1, 'corrAns': 1},
        {'cond': 2, 'topText': '紅', 'topColour': 'yellow', 'bottomText': '黃', 'congruent': 0, 'match': 1, 'corrAns': 1},
        {'cond': 2, 'topText': '紅', 'topColour': 'green', 'bottomText': '綠', 'congruent': 0, 'match': 1, 'corrAns': 1},
        {'cond': 2, 'topText': '藍', 'topColour': 'red', 'bottomText': '紅', 'congruent': 0, 'match': 1, 'corrAns': 1},
        {'cond': 2, 'topText': '藍', 'topColour': 'yellow', 'bottomText': '黃', 'congruent': 0, 'match': 1, 'corrAns': 1},
        {'cond': 2, 'topText': '藍', 'topColour': 'green', 'bottomText': '綠', 'congruent': 0, 'match': 1, 'corrAns': 1},
        {'cond': 2, 'topText': '黃', 'topColour': 'red', 'bottomText': '紅', 'congruent': 0, 'match': 1, 'corrAns': 1},
        {'cond': 2, 'topText': '黃', 'topColour': 'blue', 'bottomText': '藍', 'congruent': 0, 'match': 1, 'corrAns': 1},
        {'cond': 2, 'topText': '黃', 'topColour': 'green', 'bottomText': '綠', 'congruent': 0, 'match': 1, 'corrAns': 1}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
      Routine stim
      Routine iti
    LoopTerminator trials
    Routine rest
  LoopTerminator block
  Routine complete
