PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1680, 1050]
  color = $[-1,-1,-1]
  expName = stroop-practise
  keyboardBackend = ioHub
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Routines
  Routine instructions
    TextComponent instr_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0
      units = height
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      text:
        你將會在熒幕上看到兩個字。

        如果上方的字的顔色與下方的字的意思吻合，
        請按左鍵。
        如果上方的字的顔色與下方的字的意思不吻合，
        請按右鍵。

        準備好請按左鍵
    KeyboardComponent prepared_resp
      allowedKeys = 'left'
      correctAns = thisTrial.corrAns
      forceEndRoutine = True
      startVal [time (s)] = 0
      store = nothing
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  Routine iti
    CodeComponent corr_counting
      Code Type = Py
      Begin Experiment:
        corr_counter = 0
      Begin Routine:
        if key_resp.keys == 'left' and int(corrAns) == 1:
            corr_counter += 1
        elif key_resp.keys == 'right' and int(corrAns) == 2:
            corr_counter += 1
      End Experiment:
        print("counter = ", corr_counter, "/12")
    TextComponent trial_fixation
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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  Routine stim
    TextComponent top_txt
      color [set every repeat] = $topColour
      letterHeight = 0.15
      pos = (0, 0.2)
      startVal [time (s)] = 0
      stopVal [duration (s)] = 2.0
      text [set every repeat] = $topText
      units = height
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    TextComponent bottom_txt
      letterHeight = 0.15
      pos = (0, -0.2)
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.9
      text [set every repeat] = $bottomText
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    KeyboardComponent key_resp
      allowedKeys = 'left','right'
      correctAns = $corrAns
      forceEndRoutine = False
      startVal [time (s)] = 0.1
      stopVal [duration (s)] = 1.9
      store = first key
      storeCorrect = True
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  Routine complete
    TextComponent end_txt
      font = Songti SC
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = 實驗完成
      units = height
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    KeyboardComponent end_key_resp
      allowedKeys = 'q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine prepare
    TextComponent instr_fixation
      letterHeight = 0.15
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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Flow
  Routine instructions
  Routine prepare
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trialTypes_practise.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'cond': 1, 'topText': '紅', 'topColour': 'red', 'bottomText': '紅', 'congruent': 1, 'match': 1, 'corrAns': 1},
      {'cond': 1, 'topText': '綠', 'topColour': 'green', 'bottomText': '綠', 'congruent': 1, 'match': 1, 'corrAns': 1},
      {'cond': 2, 'topText': '藍', 'topColour': 'red', 'bottomText': '紅', 'congruent': 0, 'match': 1, 'corrAns': 1},
      {'cond': 2, 'topText': '黃', 'topColour': 'blue', 'bottomText': '藍', 'congruent': 0, 'match': 1, 'corrAns': 1},
      {'cond': 3, 'topText': '藍', 'topColour': 'blue', 'bottomText': '綠', 'congruent': 1, 'match': 0, 'corrAns': 2},
      {'cond': 3, 'topText': '綠', 'topColour': 'green', 'bottomText': '紅', 'congruent': 1, 'match': 0, 'corrAns': 2},
      {'cond': 4, 'topText': '紅', 'topColour': 'green', 'bottomText': '藍', 'congruent': 0, 'match': 0, 'corrAns': 2},
      {'cond': 4, 'topText': '黃', 'topColour': 'green', 'bottomText': '紅', 'congruent': 0, 'match': 0, 'corrAns': 2},
      {'cond': 5, 'topText': '並', 'topColour': 'green', 'bottomText': '綠', 'congruent': 0, 'match': 1, 'corrAns': 1},
      {'cond': 5, 'topText': '到', 'topColour': 'yellow', 'bottomText': '黃', 'congruent': 0, 'match': 1, 'corrAns': 1},
      {'cond': 6, 'topText': '的', 'topColour': 'red', 'bottomText': '藍', 'congruent': 0, 'match': 0, 'corrAns': 2},
      {'cond': 6, 'topText': '個', 'topColour': 'green', 'bottomText': '藍', 'congruent': 0, 'match': 0, 'corrAns': 2}]
    Routine stim
    Routine iti
  LoopTerminator trials
  Routine complete
